# Generated by Configurator on Tue Jul 01 15:42:28 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,DShutter,DemoCamera,DShutter

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub
Parent,DShutter,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,DShutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets

# PixelSize settings

